PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = The Self-Relevance Effect on Selective Attention task
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Instructions
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    TextComponent instrText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        In this task, you will see words printed in two colors (blue or yellow).

        Your job is to identify the ink color of each word as quickly and accurately as possible,
        while ignoring what the word means.

        Press:
        B → for BLUE
        Y → for YELLOW

        Press SPACE to begin when you’re ready.
    KeyboardComponent instr_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Welcome
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Welcome
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  Routine ColourNaming
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    PolygonComponent fixation
      fillColor = white
      shape = circle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      units = pix
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    TextComponent text
      color [set every repeat] = $inkColour
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = 'b','y'
      correctAns = $correct_res
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine Thank_You
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Thank you!
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Flow
  Routine Instructions
  Routine Welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Self.vs.other_conditions.csv
    loopType = fullRandom
    nReps = 5
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    conditions:
      [OrderedDict([('word', 'Name'), ('category', 'self '), ('inkColour', 'blue'), ('correct_res', 'b')]),
      OrderedDict([('word', 'Name'), ('category', 'self '), ('inkColour', 'yellow'), ('correct_res', 'y')]),
      OrderedDict([('word', 'Me'), ('category', 'self '), ('inkColour', 'blue'), ('correct_res', 'b')]),
      OrderedDict([('word', 'Me'), ('category', 'self '), ('inkColour', 'yellow'), ('correct_res', 'y')]),
      OrderedDict([('word', 'Myself'), ('category', 'self '), ('inkColour', 'blue'), ('correct_res', 'b')]),
      OrderedDict([('word', 'Myself'), ('category', 'self '), ('inkColour', 'yellow'), ('correct_res', 'y')]),
      OrderedDict([('word', 'Mine'), ('category', 'self '), ('inkColour', 'blue'), ('correct_res', 'b')]),
      OrderedDict([('word', 'Mine'), ('category', 'self '), ('inkColour', 'yellow'), ('correct_res', 'y')]),
      OrderedDict([('word', 'I'), ('category', 'self '), ('inkColour', 'blue'), ('correct_res', 'b')]),
      OrderedDict([('word', 'I'), ('category', 'self '), ('inkColour', 'yellow'), ('correct_res', 'y')]),
      OrderedDict([('word', 'My'), ('category', 'self '), ('inkColour', 'blue'), ('correct_res', 'b')]),
      OrderedDict([('word', 'My'), ('category', 'self '), ('inkColour', 'yellow'), ('correct_res', 'y')]),
      OrderedDict([('word', 'Personal'), ('category', 'self '), ('inkColour', 'blue'), ('correct_res', 'b')]),
      OrderedDict([('word', 'Personal'), ('category', 'self '), ('inkColour', 'yellow'), ('correct_res', 'y')])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
    Routine ColourNaming
  LoopTerminator trials
  Routine Thank_You
